// Comments & Code by Sloane Walker (07/2025)
// Global Variables
// 
var bw_threshold = 12; //black white threshold
var scale = 1;
var unit = "pixel";
var scale_choice;

//------------------------------------------------------------------------------
// Macro - Finds both colour and total area
//------------------------------------------------------------------------------

macro "Thickness Tool - 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"
{
    // Program prep
    thicknessToolOptions();
    colours = newArray(" (red)", " (green)"," (blue)");
    if (isOpen("ROI Manager"))
   {
      selectWindow("ROI Manager");
      roiManager("reset");
      run("Select None");
      run("Close");
   }
    
    // Image Prep
    name = getTitle();
    width = getWidth();
    height = getHeight();
    run("Duplicate...", "duplicate"); // Change the duplicate not the original
    new_name = getTitle();
    newImage("Total", "8-bit black", width, height, 1);
    selectWindow(new_name);
    run("Split Channels"); //split channels for colour analysis

    // Image Names
    names = newArray;
    for (i = 0; i < 3; i++){
        names = Array.concat(names, new_name + colours[i]);
    }
    names = Array.concat(names, "Total");
    
    // Individual Colour Channel Analysis
    for (i = 0; i < 4; i++){ //create mask and analysis each colour
        selectWindow(names[i]);
        run("Divide...", "value=3"); //closest to value that accurately represents as possible.
        setThreshold(bw_threshold, 255); //make threshold the minimum. Get anything from that to white.
        run("Convert to Mask");
        run("Create Selection");
        roiManager("Add"); 

        // Getting base statistics
        getStatistics(area, mean, min, max, std);
        pixCount = area; //get count of anything you have made white
        areaScaled = pixCount * Math.pow(1/scale, 2);
        area_percentage = pixCount / (height * width) * 100;


        //Getting height and std of Height
        run("Rotate 90 Degrees Right");
        setThreshold(bw_threshold, 255); //make threshold the minimum. Anything above turns to white.
        run("Convert to Mask");
        run("Create Selection");
        roiManager("Add");

        
        Roi.getContainedPoints(xpoints, ypoints);
        differences = edgeExtremes(xpoints);
        Array.getStatistics(differences, min, max, heightAvg, heightStD);
        roiManager("Select", roiManager("Count") - 1);
        roiManager("Delete");

        //Results & finishing
        n=getValue("results.count");
        if (i <3){
        setResult("Label", n, name + colours[i]);}
        else {
        setResult("Label", n, name);
        }
        setResult(unit + "^2", n, areaScaled);
        setResult("Area %", n, area_percentage);
        setResult("Avg. Height", n, heightAvg);
        setResult("St.D. Height", n, heightStD);
        wait(100); //pause for imageJ to catch up (MANDATORY)

        run("Rotate 90 Degrees Left");
        imageCalculator("add", "Total", names[i]);
        close(names[i]);
    }
    //final touches
    setResult("Label", n, name); //rename last result to image name.
    roiManager("Select", 0);
    roiManager("Set Color", "red");
    roiManager("Select", 1);
    roiManager("Set Color", "green");
    roiManager("Select", 2);
    roiManager("Set Color", "blue");

    selectWindow(name);
    roiManager("Select", 3); //see total area over original image.
}



function edgeExtremes(points){
    edgeMin = newArray();
    edgeMax = newArray();
    edgeMin = Array.concat(edgeMin, points[0]); //first entry is always a minimum.
    for (i = 1; i < points.length - 2; i++)
    {
         if (points [i-1] > points[i] && points[i] < points [i+1]) //if a minimum
         {
            edgeMin = Array.concat(edgeMin, points[i]);
         }
         else if (points[i-1] < points[i] && points[i] > points[i+1]){ //if a maximum
            edgeMax = Array.concat(edgeMax, points[i]);
         }
    }
    length = edgeMax.length;
    if(edgeMin.length < edgeMax.length)
    { 
    length = edgeMin.length;
    }



    edgeDiff = newArray;
    for (j = 0; j < length-1; j++)
    {
        edgeDiff = Array.concat(edgeDiff, edgeMax[j] - edgeMin[j]);
    }
    return edgeDiff;
}

function thicknessToolOptions()
{
    set_scale = newArray("Yes", "No");
    Dialog.create("Epithlial Thickness Tool Options");
    Dialog.addNumber("Shaded Threshold Value", bw_threshold);
    Dialog.addChoice("Use last set scale?", set_scale);
    Dialog.show();

    bw_threshold = Dialog.getNumber();
    scale_choice = Dialog.getChoice();

    if (scale_choice == "No"){
        units = newArray("pixel", "um", "nm", "mm", "Other");
        Dialog.create("Scale");
        Dialog.addNumber("Pixels per Unit", scale);
        Dialog.addChoice("Unit Label", units);
        Dialog.show();

        scale = Dialog.getNumber();
        unit = Dialog.getChoice();
    }
}